CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Drag and drop the Example1 folder into the File list panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern ‘TIF’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does containregexp "G.*w1.tif")
    Name to assign these images:OrigDNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "G.*w3.tif")
    Name to assign these images:OrigCyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using All images, the Regular method and a median filter.']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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:Yes
    Name the averaged image:IllumDNAUnsmoothed
    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigCyto
    Name the output image:IllumCyto
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:Yes
    Name the averaged image:IllumCytoUnsmoothed
    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Apply the illumination function to the original image and examine the result. ']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
    Select the input image:OrigDNA
    Name the output image:CorrectedDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function to the original image and examine the result. ']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
    Select the input image:OrigCyto
    Name the output image:CorrectedCyto
    Select the illumination function:IllumCyto
    Select how the illumination function is applied:Divide
