CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (or (file does contain ".mat") (extension does istif)) (file doesnot contain "004-")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<WellRow>[0-9]{3})[0-9](?P<WellCol>[0-9]{2})-(?P<Site>[0-9]{1,2})-[0-9]{8}(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:Z:\\\\\\\\(?P<TopFolderName>[A-Za-z0-9_]{1,99})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllumTuj1': u'TopFolderName', u'Map2': u'TopFolderName', u'IllumDAPI': u'TopFolderName', u'Tuj1': u'TopFolderName', u'IllumC4': u'TopFolderName', u'DAPI': u'TopFolderName', u'IllumMap2': u'TopFolderName', u'C4': u'TopFolderName'}, {u'IllumTuj1': None, u'Map2': u'Well', u'IllumDAPI': None, u'Tuj1': u'Well', u'IllumC4': None, u'DAPI': u'Well', u'IllumMap2': None, u'C4': u'Well'}, {u'IllumTuj1': None, u'Map2': u'Site', u'IllumDAPI': None, u'Tuj1': u'Site', u'IllumC4': None, u'DAPI': u'Site', u'IllumMap2': None, u'C4': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:8
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "001.tif")
    Name to assign these images:C4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "002.tif")
    Name to assign these images:Tuj1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "003.tif")
    Name to assign these images:Map2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "004.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumDAPI")
    Name to assign these images:IllumDAPI
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumC4")
    Name to assign these images:IllumC4
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumTuj1")
    Name to assign these images:IllumTuj1
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumMap2")
    Name to assign these images:IllumMap2
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:C4
    Name the output image:CorrC4
    Select the illumination function:IllumC4
    Select how the illumination function is applied:Divide
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:Map2
    Name the output image:CorrMap2
    Select the illumination function:IllumMap2
    Select how the illumination function is applied:Divide
    Select the input image:Tuj1
    Name the output image:CorrTuj1
    Select the illumination function:IllumTuj1
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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
    Input:CorrDAPI
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Map2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Tuj1
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Input:ImageAfterMath
    Output:EnhanceNeurites
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:9|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
    Input:EnhanceNeurites
    Output:ThreshNeurites
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Closing:[module_num:10|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
    Input:ThreshNeurites
    Output:Closing
    Structuring element:disk,20

MaskImage:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the output image:ImageAfterMath_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

ApplyThreshold:[module_num:12|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
    Input:ImageAfterMath_Masked
    Output:Neurites_MaskedAndThreshed
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodiesPlusNeurites
    Select the method to identify the secondary objects:Propagation
    Select the input image:Neurites_MaskedAndThreshed
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    Regularization factor:0
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:CellBodiesPlusNeurites
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:C4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiImage
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:C4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellImage
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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