CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (or (file does contain ".png") (extension does istif))

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "w3Corrected.png")
    Name to assign these images:Cyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1Corrected.png")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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enabled:False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
    Select the input image:C4
    Name the output image:CorrC4
    Select the illumination function:IllumC4
    Select how the illumination function is applied:Divide
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:Map2
    Name the output image:CorrMap2
    Select the illumination function:IllumMap2
    Select how the illumination function is applied:Divide
    Select the input image:Tuj1
    Name the output image:CorrTuj1
    Select the illumination function:IllumTuj1
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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
    Input:DNA
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Input:Cyto
    Output:EnhanceNeurites
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:8|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
    Input:EnhanceNeurites
    Output:ThreshNeurites
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Closing:[module_num:9|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
    Input:ThreshNeurites
    Output:Closing
    Structuring element:disk,20

MaskImage:[module_num:10|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
    Select the input image:Cyto
    Name the output image:ImageAfterMath_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Closing
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodiesPlusNeurites
    Select the method to identify the secondary objects:Propagation
    Select the input image:ImageAfterMath_Masked
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    Regularization factor:0
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:CellBodiesPlusNeurites
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyto
    Name the output image:CytoOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CellBodiesPlusNeurites
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiImage
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellImage
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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