CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (or (file does contain ".png") (extension does istif))

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "w3.tif")
    Name to assign these images:Cyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_0")
    Name to assign these images:bkgd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_1")
    Name to assign these images:nuclei_bright
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_2")
    Name to assign these images:nuclei_neuron
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_3")
    Name to assign these images:nuerite_bright
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_4")
    Name to assign these images:nuerite
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_5")
    Name to assign these images:nuerite_edge
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_6")
    Name to assign these images:nuclei_neuron_edge
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "es_7")
    Name to assign these images:nuclei_neuron_body
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ApplyThreshold:[module_num:5|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notes:['An aggressive threshold will find the boundaries of the neurons based upon a probe that labels nueron bodies and neurites.']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
    Input:Cyto
    Output:ApplyThresholdCyto
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

Opening:[module_num:6|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notes:['Nuclei are found by segmenting an ilastik channel specific to nuclei. An opening morphological operation smooths this probability image to improve segmentation.']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
    Input:nuclei_neuron
    Output:nuclei_neuron_opened
    Structuring element:disk,10

IdentifyPrimaryObjects:[module_num:7|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notes:['The nuclei are segmented from an ilastik probability image specifc to nuclei.']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
    Input:nuclei_neuron_opened
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ImageMath:[module_num:8|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notes:["Several probability images are combined through addition: neurites, neurite edges, and neuron bodies that don't include nuclei. Adding these probability images together yields cellular morphology that includes the features of interest to be segmented, namely neurons and their neurites. Using ilastik in this way can be thought of as using a nonlinear threshold."]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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathNeurites
    Image or measurement?:Image
    Select the first image:nuerite
    Multiply the first image by:0.8
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    Image or measurement?:Image
    Select the second image:nuerite_edge
    Multiply the second image by:0.1
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    Image or measurement?:Image
    Select the third image:nuclei_neuron_body
    Multiply the third image by:0.1
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
ApplyThreshold:[module_num:9|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notes:['The combined probability image is transformed into a binary image for segmentation.']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
    Input:ImageAfterMathNeurites
    Output:ApplyThresholdNeurites
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Morph:[module_num:10|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notes:['This binary image is transformed into a skeleton. From the ilastik/cp transformation of the neurite image we wanted to isolate the connections between neurons and their neurites. However, this transformation may appear "alien" compared to the probe used to label the neurons and their neurites. Therefore, to create a segmentation that is true to the source image, only the connections are retained through a skeletonization process.']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
    Select the input image:ApplyThresholdNeurites
    Name the output image:Neurite_skeletons
    Select the operation to perform:thin
    Number of times to repeat operation:Forever
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
Watershed:[module_num:11|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notes:['The boundaries of the neurites and neurons are found using the skeleton as a seed in the original cyto image.']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
    Input:ApplyThresholdCyto
    Object:Watershed
    Generate from:Markers
    Markers:Neurite_skeletons
    Mask:ApplyThresholdCyto
    Connectivity:8

ConvertObjectsToImage:[module_num:12|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notes:['This watershed image is then transformed into a binary image. This binary image will closely resemble the binary image of the thresholded cyto channel. However, this new binary image will include connections between the neurites that were inferred through the ilastik/cp processing.']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
    Select the input objects:Watershed
    Name the output image:Neurite_Binary
    Select the color format:Binary (black & white)
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
Opening:[module_num:13|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
    Input:Neurite_Binary
    Output:Neurite_Binary_Opening
    Structuring element:disk,1

Closing:[module_num:14|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
    Input:Neurite_Binary_Opening
    Output:Neurite_Binary_Closing
    Structuring element:disk,1

IdentifySecondaryObjects:[module_num:15|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notes:['The nuclei identied earlier will be used to segment individual nuerons. Assignment of neurites to each neuron is determined by the distance away from a nuclei. Without being given additonal information about the neurites, this assumes the likelihood a nuerite belongs to a nueron is determined by the shortest path to a nuclei.']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodiesPlusNeurites
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Neurite_Binary_Closing
    Number of pixels by which to expand the primary objects:2048
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:16|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notes:['The segmentation of the nuclei is visualized.']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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:17|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notes:['The segmentation of the neurons and neurites is visualized.']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
    Select the input objects:CellBodiesPlusNeurites
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

OverlayOutlines:[module_num:18|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notes:['An outline of the segmentation on the original image is created as a visual aid.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyto
    Name the output image:CytoOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:CellBodiesPlusNeurites
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucleiImage
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CellImage
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CytoOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CytoOverlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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